PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'run': '', 'date': ''}
  Full-screen window = True
  Monitor = MRIMonitor
  Save csv file = True
  Screen = 2
  Units = deg
  Window size (pixels) = [1280, 720]
  expName = Retinotopy_rings
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Routines
  Routine Welcome
    TextComponent Welcome_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press 'space' to continue
    KeyboardComponent Welcome_rsp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent Instructions_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        Please stare at the fixation for the duration of the experiment.

        Press 'space' when you are happy to begin.
    KeyboardComponent Instructions_rsp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent End_text
      letterHeight = 1
      startVal [time (s)] = 0.0
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      text:
        The End!

        Press 'space' to close
    KeyboardComponent End_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Ring
    CodeComponent Ring_code
      Code Type = Auto->JS
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      Begin Routine:
        ## Parameters of visual.RadialStim
        # angular cycles: number of spokes
        # angular phase: orientation of the texture
        # angular res: number of triangles used
        # radial cycles: the number of rings
        # radial phas: phase of the texture from the centre to the
        #   perimiter of the stimulus. Can be used to drift rings
        #   inwards/outwards
        # sf: spatial frequency of the grating texture
        #   if units are deg, sf is cycles per degree
        # visible wedge: (start,end), (0,360) is full visibility
        # auto draw: whether the stimulus should be automatically drawn
        #    on each frame flip.
        # auto log: every change logged?
        # contrast: 1 visible, 0 no contrast, -1 reversed
        # ori: orientation in degrees. 0 vertical, positive values
        #   rotate clockwise
        # pos: centre of the stimuli

        #ringClock = core.Clock()
        startRing = trigClock.getTime() # in relation to triggers
        thisExp.addData('startRingTime',startRing)

        ## Set some parameters for drawing the stimuli
        num_wedges = 24
        num_rings = 8 #total of 8 rings
        num_expansions =1 #8 steps outwards
        wedge_size = (0,360) #full circle this time
        stim_size = (14, 14) #degrees
        opacity = 0.98
        one_ring_size = stim_size[1]/num_rings #1.75
        #ring_sizes = numpy.arange(one_ring_size,stim_size[1],stim_size[1]+1)
        ring_sizes = np.arange(1.75,15,1.75) # should be proportional to stim_size
        circle_sizes = np.arange(0,14,1.75)/2 # radius! one size behind the rings

        ## Set the timings and frame numbers
        TR = 2
        secs_per_expansion = 36 #s
        secs_per_ring = secs_per_expansion/len(ring_sizes) # 4.5s
        frame_rate = 0.0166 #s
        flash_freq = 6 #hz
        ms_per_pattern = round(1000/flash_freq) #1666.66 or 167ms
        secs_per_pattern = ms_per_pattern/1000 # 0.167s
        frames_per_pattern = round(secs_per_pattern/frame_rate) # 10
        frames_per_ring = round(secs_per_ring/frame_rate) #271
        total_frames = round(frames_per_ring*len(ring_sizes)*num_expansions) #17344
        total_time = total_frames*frame_rate #287.91s or 4.79mins

        ## draw a fixation circle
        fix = visual.Circle(win,radius=0.5, edges=128, units='deg', lineWidth=0,
            lineColor=None, lineColorSpace=None, fillColor='green', fillColorSpace=None,
            size=0.5, ori=0.0, opacity=None, contrast=1.0, depth=0,
            interpolate=True, lineRGB=False, fillRGB=False, name=None, autoLog=None,
            autoDraw=False, color=None, colorSpace='rgb')

        ## Loop over 8 ring cycles
        for s in range(num_expansions):
        ## Loop over ring positions
            for r in range(len(ring_sizes)):
                ring_s = ring_sizes[r]
                circle_s = circle_sizes[r]
                numrings = r+1 # python index starts at 0

                T = trigClock.getTime() # save time
                thisExp.addData(('startRing'+str(s)+str(r)),T)

                # draw a small circle to hide central rings
                # two rings are always visible
                smallC = visual.Circle(win,radius=circle_s,size=1,edges=128, units='deg', lineWidth=0,
                    lineColor=None, lineColorSpace=None, fillColor='grey', fillColorSpace=None,
                    ori=0.0, opacity=None, contrast=1.0, depth=0,
                    interpolate=True, lineRGB=False, fillRGB=False, name=None, autoLog=None,
                    autoDraw=False, color=None, colorSpace='rgb')

                # Draw wedges with correct orientation
                # wedge pattern 1 (contrast 1)
                wedge1 = visual.RadialStim(win,tex='sqrXsqr', mask='none',
                    units='deg', pos=(0.0, 0.0), size=ring_s, radialCycles=numrings,
                    angularCycles=num_wedges, radialPhase=14, angularPhase=0, ori=0,
                    texRes=64, angularRes=100, visibleWedge=wedge_size, rgb=None,
                    color=(-1.0, -1.0, -1.0), colorSpace='rgb', dkl=None, lms=None,
                    contrast=1.0, opacity=opacity, depth=0, rgbPedestal=(0.0, 0.0, 0.0),
                    interpolate=False, name='Wedge1', autoLog=None, maskParams=None)

                # wedge pattern 2 (contrast -1)
                wedge2 = visual.RadialStim(win,tex='sqrXsqr', mask='none',
                    units='deg', pos=(0.0, 0.0), size=ring_s, radialCycles=numrings,
                    angularCycles=num_wedges, radialPhase=14, angularPhase=0, ori=0,
                    texRes=64, angularRes=100, visibleWedge=wedge_size, rgb=None,
                    color=(-1.0, -1.0, -1.0), colorSpace='rgb', dkl=None, lms=None,
                    contrast=-1.0, opacity=opacity, depth=0, rgbPedestal=(0.0, 0.0, 0.0),
                    interpolate=False, name='Wedge2', autoLog=None, maskParams=None)

                # loop over all frames per ring - 2 frames rounded out!
                for frameN in range(round(frames_per_ring/(frames_per_pattern*2))):
                    # loop over one patern reversal
                    for frameN in range(frames_per_pattern*2):
                        if 0 <= frameN <= frames_per_pattern:
                            wedge1.draw(win)
                            smallC.draw(win)
                            fix.draw(win)
                            win.flip()
                        if frames_per_pattern < frameN <= (frames_per_pattern+frames_per_pattern):
                            wedge2.draw(win)
                            smallC.draw(win)
                            fix.draw(win)
                            win.flip()

        # end
      End Routine:
        endRing = trigClock.getTime()
        thisExp.addData('endRingTime',endRing)

        continueRoutine = True
  Routine Fixation
    PolygonComponent Fixation_circle
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
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  Routine WaitForTriggers
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        trigKeyboard = keyboard.Keyboard()
        trigClock = core.Clock()

        # draw waiting text
        textTrig = visual.TextStim(win, 'Waiting for scanner...',
             color=('white'), colorSpace='rgb', height=1)
        textTrig.draw(win)
        win.flip()
      Each Frame:
        # how many triggers to wait for?
        triggers = 4

        # wait for keypresses here
        rtList = []
        count = 0
        while count < triggers:
            if trigKeyboard.getKeys(keyList=["s"]):
                count = count+1
                rt = trigClock.getTime()
                thisExp.addData('trigKeyboard.rt',rt)
                thisExp.nextEntry()
Flow
  Routine Welcome
  Routine Instructions
  Routine WaitForTriggers
  Routine Fixation
  Routine Ring
  Routine Fixation
  Routine End
